PsychoPy2experiment version="2021.2.3"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=C14MZR1X
  Experiment info = {'Prolific ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/instruc1.png', 'stimuli/instruc2.png', 'stimuli/instruc3.png', 'stimuli/instruc4.png', 'stimuli/instruc5.png', 'stimuli/instruc6.png', 'stimuli/instruc7.png', 'stimuli/instruc8.png', 'stimuli/pirate_ship.png', 'stimuli/coin.png', 'stimuli/forced_choice1.png', 'stimuli/forced_choice2.png', 'stimuli/forced_choice3.png', 'stimuli/forced_choice4.png', 'stimuli/forced_choice5.png', 'stimuli/forced_choice6.png', 'stimuli/free_choice1.png', 'stimuli/free_choice2.png', 'stimuli/free_choice3.png', 'stimuli/free_choice4.png', 'stimuli/free_choice5.png', 'stimuli/free_choice6.png', 'stimuli/free_choice7.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = Pirates
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Routines
  Routine exploit
    CodeComponent code_exploit
      Code Type = JS
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      Begin JS Routine:
        // if just entered patch, start timer
        if ((exploit_actions===0)) {
            patchTime=0;
            startTime = Date.now();
            n_actions=0;
        }

        // record onset of the decision phase
        block_present_time=Date.now()
        block_time_elapsed_event_onset=(block_present_time-block_start_time)/1000;
        time_remaining_event_onset=(time_per_block*60)-block_time_elapsed_event_onset;
      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }

        // force the first action to be a treasure dig
        if ((exploit_actions===0)) {
        valid_keypress=keys_first_exploit_allowed.includes(exploit_resp.keys);
        if ((valid_keypress===true)) {
            continueRoutine=false;
            }
        }

        // after one dig, allow digging or sailing responses
        if ((exploit_actions>0)) {
        valid_keypress=keys_exploit_allowed.includes(exploit_resp.keys);
        if ((valid_keypress===true)) {
            continueRoutine=false;
            }
        }

        // if the total time allowed in the block have been taken, end the block
        block_present_time=Date.now()
        block_time_elapsed=(block_present_time-block_start_time)/1000;
        time_remaining=(time_per_block*60)-block_time_elapsed
        if ((time_remaining<=0)) {
            exploit_actions=0;
            n_actions=0;
            continueRoutine=false;
            trials.finished=true;
            exploit_loop.finished=true;
            }
        time_remaining_rounded=Math.round(time_remaining);
        time_remaining_msg='Time left in block: ' + time_remaining_rounded.toString();

        time_remaining_mins=Math.floor(time_remaining_rounded/60)
        time_remaining_sec=time_remaining_rounded-(time_remaining_mins*60)
        time_remaining_msg='Time left in block: ' + time_remaining_mins.toString() + ':' + time_remaining_sec.toString();
      End JS Routine:
        // compute the reward value of the current patch
        if ((exploit_actions===0)) { // if first action, use actual patch values
            rew_displayed = Math.floor(isld_rvals[0]);
            rew_displayed_msg='+' + rew_displayed.toString();

            if (Math.floor(isld_rvals[0])>=100) {
                treasure_pos=[];
                //treasure_pos=[treasure_pos_orig[0]+0.0075,treasure_pos_orig[1]];
                treasure_pos=[treasure_pos_orig[0]+0.01,treasure_pos_orig[1]];
                }
            if (Math.floor(isld_rvals[0])<isld_svals[0]) {
                treasure_pos=[];
                treasure_pos=[treasure_pos_orig[0],treasure_pos_orig[1]];
            }
        }

        // define distribution function
        //https://mika-s.github.io/javascript/random/normal-distributed/2019/05/15/generating-normally-distributed-random-numbers-in-javascript.html
        function boxMullerTransform() {
            const u1 = Math.random();
            const u2 = Math.random();
            const z0 = Math.sqrt(-2.0 * Math.log(u1)) * Math.cos(2.0 * Math.PI * u2);
            const z1 = Math.sqrt(-2.0 * Math.log(u1)) * Math.sin(2.0 * Math.PI * u2);
            return { z0, z1 };
        }
        function getNormallyDistributedRandomNumber(mean, stddev) {
            const { z0, _ } = boxMullerTransform();
            return z0 * stddev + mean;
        }

        if ((exploit_actions>0)) { // if beyond first action, enact decay
        //    base = 1-k; // k is the decay parameter
        //    power = (exploit_actions);
        // draw starting value from a distribution
            k=getNormallyDistributedRandomNumber(k_mean, k_sd);
            //if value drawn for is greater than 1, reset to 1
            //so that patch values do not increase
            if (k>1) {
                k=1
            }
            isld_rvals[0] = Math.floor(isld_rvals[0] * k);
            rew_displayed = Math.floor(isld_rvals[0]);
            rew_displayed_msg='+' + rew_displayed.toString();
            }

        // display coin at normal position if two digit reward
        if (Math.floor(isld_rvals[0])<isld_svals[0]) {
                treasure_pos=[];
                treasure_pos=[treasure_pos_orig[0],treasure_pos_orig[1]];
            }
        if (Math.floor(isld_rvals[0])>=100) {
                treasure_pos=[];
                //treasure_pos=[treasure_pos_orig[0]+0.0075,treasure_pos_orig[1]];
                treasure_pos=[treasure_pos_orig[0]+0.01,treasure_pos_orig[1]];
        }

        // update exploit actions
        if ((exploit_resp.keys === "space")) {
            decision_type=1;
            exploit_actions = (exploit_actions + 1);
            n_actions = (n_actions + 1);
            points_blk=points_blk+rew_displayed;
            total_points=total_points+isld_rvals[0];
        }
        if ((exploit_resp.keys === "s")) {
            decision_type=2;
            n_actions = (n_actions + 1);
            }
        mean_reward_blk=points_blk/actions_blk;
        mean_reward_entire_experiment=total_points/total_actions;
        actions_blk=(actions_blk + 1);
        total_actions=(total_actions + 1);

        // save data
        psychoJS.experiment.addData('consent_given', 1);
        psychoJS.experiment.addData('screeningQ1', 1);
        psychoJS.experiment.addData('screeningQ2', 1);
        psychoJS.experiment.addData('age', age);
        psychoJS.experiment.addData('gender', gender);
        psychoJS.experiment.addData('EducationYears', educationYears);

        // setting and block variables
        psychoJS.experiment.addData('starting_value_mean', sval_mean); // should be defined under begin experiment in travel component
        psychoJS.experiment.addData('starting_value_sd', sval_sd);
        psychoJS.experiment.addData('decay_rate_mean', k_mean);     // should update based on block type
        psychoJS.experiment.addData('decay_rate_sd', k_sd);
        psychoJS.experiment.addData('blk_duration_mins', time_per_block);
        psychoJS.experiment.addData('travel_duration', travel_duration);     // should update based on block type
        psychoJS.experiment.addData('feedback_duration', fbk_duration);
        psychoJS.experiment.addData('blk_number', curr_blk_number);
        psychoJS.experiment.addData('blk_type', curr_blk); // 1=long-steep, 2=long-shallow, 3=short-steep, 4=short-shallow
        psychoJS.experiment.addData('starting_value', sval);

        // trial variables
        psychoJS.experiment.addData('trial_phase', 2);   // 1 for travel, 2 for exploit/leave decision, 3 for exploit feedback
        psychoJS.experiment.addData('decision_type', decision_type); // initialise. Use 1 for stay, 2 for leave
        psychoJS.experiment.addData('decay_rate', k);    // decay value drawn from the distribution
        psychoJS.experiment.addData('patch_reward_prospective', rew_displayed); // the prospective reward for an exploit action
        if ((exploit_resp.keys === "space")) {
            psychoJS.experiment.addData('patch_reward_recieved', rew_displayed);    // the reward recieved for the decision
        }
        if ((exploit_resp.keys === "s")) {
            psychoJS.experiment.addData('patch_reward_recieved', 0);    // the reward recieved for the decision
        }
        patchTime=(Date.now()-startTime)/1000
        psychoJS.experiment.addData('patch_time_elapsed_seconds', patchTime); // time spent in the current patch
        psychoJS.experiment.addData('patch_actions_taken', n_actions);        // number of actions related to the current patch (exploit and leave)
        psychoJS.experiment.addData('exploit_phase_key', exploit_resp.keys);
        psychoJS.experiment.addData('exploit_phase_RT', exploit_resp.rt);
        psychoJS.experiment.addData('blk_time_event_onset_seconds', block_time_elapsed_event_onset); // time recorded at begin routine
        psychoJS.experiment.addData('blk_time_event_offset_seconds',block_time_elapsed);            // time record at end routine
        psychoJS.experiment.addData('blk_time_fbk_offset_seconds', block_time_elapsed+fbk_duration);  // offset time + feedback duration (only relevant to the exploit phase)
        psychoJS.experiment.addData('blk_time_remaining_event_onset', time_remaining_event_onset);
        psychoJS.experiment.addData('blk_time_remaining_event_offset', time_remaining);
        psychoJS.experiment.addData('blk_points', points_blk);
        psychoJS.experiment.addData('blk_actions', actions_blk);
        block_present_time=Date.now()
        mean_rew_timebased=points_blk/(((block_present_time-block_start_time)/1000)+fbk_duration) // mean reward factoring in points for the most recent exploit action and feedback time
        mean_rew_actionbased=points_blk/actions_blk // mean reward factoring in points for the most recent exploit action
        psychoJS.experiment.addData('mean_reward_block_time-based', mean_rew_timebased);
        psychoJS.experiment.addData('mean_reward_block_action-based', mean_rew_actionbased);

        // broader variables
        psychoJS.experiment.addData('total_points', total_points);
        psychoJS.experiment.addData('total_actions', total_actions);
        psychoJS.experiment.addData('time_elapsed_entire_foraging_task', (block_present_time-start_time_entire_foraging_task)/1000);
        psychoJS.experiment.addData('time_elapsed_entire_experiment', (block_present_time-start_time_entire_experiment)/1000);
        psychoJS.experiment.nextEntry()

        // return to selection screen
        if ((exploit_resp.keys === "s")) {
            exploit_actions=0;
            n_actions=0;
            continueRoutine=false;
            exploit_loop.finished=true;
            //trials.finished=true;
            }
    PolygonComponent ocean_exploit
      fillColor = $ocean_col
      lineColor = $ocean_col
      shape = rectangle
      size [set every repeat] = $ocean_size
      startVal [time (s)] = 0.0
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    PolygonComponent isld_exploit
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 25
      pos [set every repeat] = $isld_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
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    ImageComponent agent_exploit
      image = $agent
      pos [set every repeat] = $ship_pos
      size [set every repeat] = $agent_size
      startVal [time (s)] = 0.0
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    TextComponent points_txt
      letterHeight = 0.025
      opacity = 0
      pos [set every repeat] = $rew_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $rew_displayed
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    TextComponent dig_sail_txt
      letterHeight = 0.025
      pos [set every repeat] = [0,-0.2]
      startVal [time (s)] = 0.0
      text = Press space to dig for treasure and s to set sail
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    TextComponent exploit_action_count
      letterHeight [set every repeat] = $action_msg_size
      pos [set every repeat] = $action_msg_pos
      startVal [time (s)] = 0.0
      text [set every frame] = $time_remaining_msg
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    KeyboardComponent exploit_resp
      allowedKeys = 'space','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine select
    CodeComponent code_select
      Code Type = JS
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      Begin JS Experiment:
        // set decay constant
        k=0.05;

        // set island replenish rates
        //isld_replen_rates = [5/50, 10/50, 15/50];
        isld_replen_rates = [2.5/50, 5/50, 7.5/50];
        initial_replen_rates = [...isld_replen_rates]; //backup copy

        // set object start values and a value vector that can be updated during the block
        isld_svals = [100, 100, 100];
        //isld_rvals = [100, 100, 100];

        // set total actions allowed in block
        total_actions_allowed=200;

        // initialise action counter for block and full experiment
        actions_blk=0;
        total_actions=0;
        patchTime=0;

        // set durations
        travel_duration = 1;
        fbk_duration=1.5;

        // set curr_isld to non-island value for first trial
        curr_isld=10;

        // set alt_islds for first trial
        alt_islds=[1,2,3];

        // set keys allowed
        //keys_allowed = ['f', 'j', 'k'];
        keys_allowed = ['j'];

        // set image paths
        agent = "stimuli/pirate_ship.png";
        bounty = "stimuli/coin.png";

        // set travel message
        travel_msg='Sailing in progress...'

        // set object sizes
        ocean_size = [0.9, 0.9];
        isld_size = [0.25, 0.25];
        agent_size = [0.1, 0.1];
        treasure_size = [0.025, 0.025];
        box_size = [0.025, 0.025]; // forced choice box
        center_txt_pos=[0, -0.075];
        cross_size = 0.035;
        action_msg_size = 0.02;

        // set object positions
        ocean_pos = [0, 0];
        isld1_pos = [(- 0.3), (- 0.25)];
        isld2_pos = [0, 0.25];
        isld3_pos = [0.3, (- 0.25)];
        curr_pos = [0, 0];
        ship_pos = [0, 0];
        goal_pos = [0, 0];
        treasure_pos = [0, 0];
        box_pos = [0, 0];
        f_keypos = [(- 0.3), (- 0.35)];
        j_keypos = [0, 0.15];
        k_keypos = [0.3, (- 0.35)];
        action_msg_pos = [0.325, 0.425];

        // set object colours
        ocean_col = [(12 / 255), (164 / 255), (255 / 255)];
        isld_col = [0, (137 / 255), (82 / 255)];
        box_line_col = [0, (255 / 255), 0];

        // set opacity values
        box_opacity = 0;
        f_key_opacity=1;
        j_key_opacity=1;
        k_key_opacity=1;
        cross_opacity=1;
        fbk_opacity=1;

        // initialise reward feedback to display and other reward variables
        rew_displayed = 0;
        total_points=0;
        points_blk=0;
        mean_reward_block=0;
        mean_reward_entire_experiment=0;

        // set select key txt
        f_key_txt='F';
        j_key_txt='J';
        k_key_txt='K';

        // set keys allowed for first action in an island
        keys_first_exploit_allowed=['space']; // ensure first action must be a dig

        // set keys allowed for remaining actions in an island
        keys_exploit_allowed=['space','s']; // allows actions after the first to be a dig or to set sail
      Begin JS Routine:
        // if block type is forced, randomly select one patch the participant can travel to
        if ((curr_blk === 1)) {
            //forced_isld_num = Math.ceil(Math.random() * 3)
            shuffle(alt_islds)
            forced_isld_num = alt_islds[0];
            keys_allowed = [];
            cross_opacity=1;
            if ((forced_isld_num === 1)) {
                keys_allowed = "f";
                box_pos = [(- 0.3), (- 0.35)];
                cross1_pos =[0, 0.15];
                cross2_pos = [0.3, (- 0.35)];
            }
            if ((forced_isld_num === 2)) {
                keys_allowed = "j";
                box_pos = [0, 0.15];
                cross1_pos = [(- 0.3), (- 0.35)];
                cross2_pos = [0.3, (- 0.35)];
            }
            if ((forced_isld_num === 3)) {
                keys_allowed = "k";
                box_pos = [0.3, (- 0.35)];
                cross1_pos = [(- 0.3), (- 0.35)];
                cross2_pos = [0, 0.15];
            }
        }

        // if block type is free allow both alternative keys to be pressed
        if ((curr_blk === 2)) {
            box_pos = [0, 0];
            box_col = ocean_col;
            keys_allowed = ['f', 'j', 'k'];
            keys_allowed = ['j'];
            cross1_pos=[0,0];
            cross2_pos=[0,0];
            cross_opacity=0;

            // set alt islands
            if ((curr_isld !==10)) {

                if ((curr_isld === 1)) {
                    keys_allowed=['j','k'];
                }

                if ((curr_isld === 2)) {
                    keys_allowed=['f','k'];
                }

                if ((curr_isld === 3)) {
                    keys_allowed=['f','j'];
                    }
                }
            keys_allowed=['j']; // only single island possible
        }

        // set remaining actions to display to participant
        actions_remaining=total_actions_allowed-actions_blk;
        actions_remaining_msg='Actions left in block: ' + actions_remaining.toString();
      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }

        // if a valid key is pressed, end this part of the trial
        valid_keypress=keys_allowed.includes(sel_resp.keys);
        if ((valid_keypress===true)) {
            continueRoutine=false;
            }

        // if the total actions allowed in the block have been taken, end the block
        if ((actions_remaining===0)) {
            curr_pos = [0, 0];
            ship_pos = [0, 0];
            curr_isld = 10;
            continueRoutine=false;
            trials.finished=true;
            }
      End JS Routine:
        // set reward position based on island selected
        rew_pos = [];
        if ((sel_resp.keys === "f")) {
            rew_pos = [(- 0.3), (- 0.25)];
            treasure_pos=[(- 0.265), (- 0.25)];
            curr_isld = 1; // index into isld_rvals
        }
        if ((sel_resp.keys === "j")) {
            rew_pos = [0, 0.25];
            treasure_pos=[0.035, 0.25];
            curr_isld = 2;
        }
        if ((sel_resp.keys === "k")) {
            rew_pos = [0.3, (- 0.25)];
            treasure_pos = [0.335, (- 0.25)];
            curr_isld = 3;
        }

        // store a backup copy
        treasure_pos_orig=[];
        treasure_pos_orig=[...treasure_pos];

        // set local action counter for upcoming island
        exploit_actions = 0;

        // update action counters
        actions_blk=(actions_blk + 1);
        total_actions=(total_actions + 1);
        actions_remaining=total_actions_allowed-actions_blk;

        // save data
        psychoJS.experiment.addData('blk_number', curr_blk_number);
        psychoJS.experiment.addData('blk_type', curr_blk); // 1 for forced choice, 2 for free choice
        psychoJS.experiment.addData('mean reward block', Math.floor(mean_reward_blk));
        psychoJS.experiment.addData('current patch position', curr_isld); // 1=left, 2=top, 3=right
        psychoJS.experiment.addData('patch value left', Math.floor(isld_rvals[0]));
        psychoJS.experiment.addData('patch value top', Math.floor(isld_rvals[1]));
        psychoJS.experiment.addData('patch value right', Math.floor(isld_rvals[2]));
        psychoJS.experiment.addData('patch replenish left', isld_replen_rates[0]);
        psychoJS.experiment.addData('patch replenish top', isld_replen_rates[1]);
        psychoJS.experiment.addData('patch replenish right', isld_replen_rates[2]);
        psychoJS.experiment.addData('current patch replenish rate', isld_replen_rates[curr_isld-1]); // 1=slow, 2=medium, 3=fast
        psychoJS.experiment.addData('patch value slow', Math.floor(isld_rvals[slow_idx]));
        psychoJS.experiment.addData('patch value medium', Math.floor(isld_rvals[medium_idx]));
        psychoJS.experiment.addData('patch value fast', Math.floor(isld_rvals[fast_idx]));
        psychoJS.experiment.addData('patch replenish slow', isld_replen_rates[slow_idx]);
        psychoJS.experiment.addData('patch replenish medium', isld_replen_rates[medium_idx]);
        psychoJS.experiment.addData('patch replenish fast', isld_replen_rates[fast_idx]);
        psychoJS.experiment.addData('decision type', 1); // Use 1 for select, 2 for stay, 3 for leave
        psychoJS.experiment.addData('trial phase', 1); // 1 for select, 2 for travel, 3 for exploit/stay decision, 4 for exploit feedback

        // selection variables
        psychoJS.experiment.addData('patch_selection_key', sel_resp.keys);
        psychoJS.experiment.addData('patch_selection_RT', sel_resp.rt);

        // exploit loop variables
        psychoJS.experiment.addData('actual_rew_gain', 0);
        psychoJS.experiment.addData('rew_fbk_displayed', 0);
        psychoJS.experiment.addData('blk_points', Math.floor(points_blk));
        psychoJS.experiment.addData('blk_actions', actions_blk);
        psychoJS.experiment.addData('exploit_phase_key', 'N/A');
        psychoJS.experiment.addData('exploit_phase_RT', 0);
        psychoJS.experiment.addData('num_exploit_actions', 0);


        // broader variables
        psychoJS.experiment.addData('mean reward entire experiment', Math.floor(mean_reward_entire_experiment));
        psychoJS.experiment.addData('total_points', Math.floor(total_points));
        psychoJS.experiment.addData('total_actions', total_actions);
        psychoJS.experiment.addData('actions_remaining', actions_remaining);
        psychoJS.experiment.addData('time in patch (seconds)', 0);
        psychoJS.experiment.nextEntry()

        // update patch values following selection
            isld_rvals[0] = (isld_rvals[0] + isld_replen_rates[0]*(100-isld_rvals[0]));
            isld_rvals[1] = (isld_rvals[1] + isld_replen_rates[1]*(100-isld_rvals[1]));
            isld_rvals[2] = (isld_rvals[2] + isld_replen_rates[2]*(100-isld_rvals[2]));

            // if the values exceed the maximum value, set them to the maximum
            if ((isld_rvals[0] > isld_svals[0])) {
                isld_rvals[0] = isld_svals[0];
            }
            if ((isld_rvals[1] > isld_svals[1])) {
                isld_rvals[1] = isld_svals[1];
            }
            if ((isld_rvals[2] > isld_svals[2])) {
                isld_rvals[2] = isld_svals[2];
            }
    PolygonComponent ocean_select
      fillColor = $ocean_col
      lineColor = $ocean_col
      pos [set every repeat] = $ocean_pos
      shape = rectangle
      size [set every repeat] = $ocean_size
      startVal [time (s)] = 0.0
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    PolygonComponent isld1_select
      disabled = True
      fillColor [set every repeat] = $isld_col
      lineColor [set every repeat] = $isld_col
      nVertices = 30
      pos [set every repeat] = $isld1_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
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    PolygonComponent isld2_select
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 30
      pos [set every repeat] = $isld2_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
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    PolygonComponent isld3_select
      disabled = True
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 30
      pos [set every repeat] = $isld3_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
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    TextComponent Select_txt
      letterHeight = 0.025
      pos [set every repeat] = center_txt_pos
      startVal [time (s)] = 0.0
      text = Select an island!
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    PolygonComponent forced_choice_box
      fillColor = $isld_col
      lineColor = $box_line_col
      lineWidth = 5
      opacity [set every repeat] = $box_opacity
      pos [set every repeat] = $box_pos
      shape = rectangle
      size [set every repeat] = $box_size
      startVal [time (s)] = 0.0
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    TextComponent Select_F
      disabled = True
      letterHeight = 0.025
      opacity [set every repeat] = $f_key_opacity
      pos [set every repeat] = $f_keypos
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f_key_txt
    TextComponent Select_J
      letterHeight = 0.025
      opacity [set every repeat] = $j_key_opacity
      pos [set every repeat] = $j_keypos
      startVal [time (s)] = 0.0
      text [set every repeat] = $j_key_txt
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    TextComponent Select_K
      disabled = True
      letterHeight = 0.025
      opacity [set every repeat] = $k_key_opacity
      pos [set every repeat] = $k_keypos
      startVal [time (s)] = 0.0
      text [set every repeat] = $k_key_txt
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    TextComponent Select_Cross1
      color = red
      disabled = True
      letterHeight [set every repeat] = $cross_size
      opacity [set every repeat] = $cross_opacity
      pos [set every repeat] = $cross1_pos
      startVal [time (s)] = 0.0
      text = X
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    TextComponent Select_Cross2
      color = red
      disabled = True
      letterHeight [set every repeat] = $cross_size
      opacity [set every repeat] = $cross_opacity
      pos [set every repeat] = $cross2_pos
      startVal [time (s)] = 0.0
      text = X
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    ImageComponent agent_img
      image [set every repeat] = stimuli/pirate_ship.png
      pos [set every repeat] = $ship_pos
      size [set every repeat] = $agent_size
      startVal [time (s)] = 0.0
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    TextComponent Select_act_count
      letterHeight [set every repeat] = $action_msg_size
      pos [set every repeat] = $action_msg_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $actions_remaining_msg
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    KeyboardComponent sel_resp
      allowedKeys = ['f','j','k']
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine travel
    CodeComponent code_select_2
      Code Type = JS
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      Begin JS Experiment:
        // initialise action counter for block and full experiment
        actions_blk=0;
        total_actions=0;
        patchTime=0;

        // set durations
        travel_duration = 10;
        fbk_duration=1.5; //3 seconds in Daw but seems too long?

        // set curr_isld to non-island value for first trial
        curr_isld = 2;

        // set keys allowed
        keys_allowed = ['space', 's'];

        // set image paths
        agent = "stimuli/pirate_ship.png";
        bounty = "stimuli/coin.png";

        // set travel message
        travel_msg='Sailing in progress...'
        travel_msg='Sailing to a new island...'

        // set object sizes
        ocean_size = [0.9, 0.9];
        isld_size = [0.25, 0.25];
        isld_size_original = [0.25, 0.25];
        agent_size = [0.1, 0.1];
        treasure_size = [0.025, 0.025];
        treasure_size = [0.05, 0.05];
        center_txt_pos=[0, -0.2];
        cross_size = 0.035;
        action_msg_size = 0.02;

        // set object positions
        ocean_pos = [0, 0];
        isld_pos = [0, 0];
        curr_pos = [0, -0.1];
        ship_pos = [0, -0.1];
        goal_pos = [0, -0.1];
        //rew_pos = [0, 0];
        //treasure_pos = [0.035, 0];
        //rew_pos = [-0.025, 0];
        //treasure_pos = [0.045, 0];
        //rew_pos = [-0.035, 0];
        //treasure_pos = [0.04, 0];
        rew_pos = [-0.0275, 0];
        treasure_pos = [0.0325, 0];
        action_msg_pos = [0.325, 0.425];

        // set object colours
        ocean_col = [(12 / 255), (164 / 255), (255 / 255)];
        isld_col = [0, (137 / 255), (82 / 255)];

        // set opacity values
        box_opacity = 0;
        f_key_opacity=1;
        j_key_opacity=1;
        k_key_opacity=1;
        cross_opacity=1;
        fbk_opacity=1;

        // initialise reward feedback to display and other reward variables
        rew_displayed = 0;
        total_points=0;
        points_blk=0;
        mean_reward_block=0;
        mean_reward_entire_experiment=0;

        // set keys allowed for first action in an island
        keys_first_exploit_allowed=['space']; // ensure first action must be a dig

        // set keys allowed for remaining actions in an island
        keys_exploit_allowed=['space','s']; // allows actions after the first to be a dig or to set sail

        // store a backup copy
        treasure_pos_orig=[];
        treasure_pos_orig=[...treasure_pos];

        // set local action counter for upcoming island
        exploit_actions = 0;
      Begin JS Routine:
        goal_pos=[0,-0.1];

        // set current pos to ship pos
        curr_pos = ship_pos;

        // start travel timer
        travel_start_t=Date.now();

        // define distribution function
        //https://mika-s.github.io/javascript/random/normal-distributed/2019/05/15/generating-normally-distributed-random-numbers-in-javascript.html
        function boxMullerTransform() {
            const u1 = Math.random();
            const u2 = Math.random();
            const z0 = Math.sqrt(-2.0 * Math.log(u1)) * Math.cos(2.0 * Math.PI * u2);
            const z1 = Math.sqrt(-2.0 * Math.log(u1)) * Math.sin(2.0 * Math.PI * u2);
            return { z0, z1 };
        }
        function getNormallyDistributedRandomNumber(mean, stddev) {
            const { z0, _ } = boxMullerTransform();
            return z0 * stddev + mean;
        }
        // draw the block starting value from a distribution
        sval=Math.round(getNormallyDistributedRandomNumber(sval_mean, sval_sd))
        isld_svals=[sval] // this is a vector out of convenience (due to adaptation from a previous design)
        isld_rvals=[sval]

        // record onset of the decision phase
        block_present_time=Date.now()
        block_time_elapsed_event_onset=(block_present_time-block_start_time)/1000;
        time_remaining_event_onset=(time_per_block*60)-block_time_elapsed_event_onset;
      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }

        // if the total time allowed in the block have been taken, end the block
        block_present_time=Date.now()
        block_time_elapsed=(block_present_time-block_start_time)/1000;
        time_remaining=(time_per_block*60)-block_time_elapsed
        if ((time_remaining<=0)) {
            exploit_actions=0;
            n_actions=0;
            continueRoutine=false;
            trials.finished=true;
            exploit_loop.finished=true;
            }
        time_remaining_rounded=Math.round(time_remaining);
        time_remaining_msg='Time left in block: ' + time_remaining_rounded.toString();

        time_remaining_mins=Math.floor(time_remaining_rounded/60)
        time_remaining_sec=time_remaining_rounded-(time_remaining_mins*60)
        time_remaining_msg='Time left in block: ' + time_remaining_mins.toString() + ':' + time_remaining_sec.toString();

        // calculate the travel time
        travel_time_remaining=Math.round(travel_duration-((block_present_time-travel_start_t)/1000))
        //console.log('travel_time_remaining:')
        //console.log(travel_time_remaining)

        //travel_time_remaining_unrounded=(travel_duration-((block_present_time-travel_start_t)/1000))
        //if (travel_time_remaining>(travel_duration/2)) {
        //    travel_opacity=1*(travel_time_remaining_unrounded/travel_duration)
        // }

        //if (travel_time_remaining<(travel_duration/2)) {
        //    travel_opacity=1*1-(travel_time_remaining_unrounded/travel_duration)
        // }
        //    travel_opacity=1*1-(travel_time_remaining_unrounded/travel_duration)
      End JS Routine:
        // save data
        psychoJS.experiment.addData('consent_given', 1);
        psychoJS.experiment.addData('screeningQ1', 1);
        psychoJS.experiment.addData('screeningQ2', 1);
        psychoJS.experiment.addData('age', age);
        psychoJS.experiment.addData('gender', gender);
        psychoJS.experiment.addData('EducationYears', educationYears);

        // setting and block variables
        psychoJS.experiment.addData('starting_value_mean', sval_mean); // should be defined under begin experiment in travel component
        psychoJS.experiment.addData('starting_value_sd', sval_sd);
        psychoJS.experiment.addData('decay_rate_mean', k_mean);     // should update based on block type
        psychoJS.experiment.addData('decay_rate_sd', k_sd);
        psychoJS.experiment.addData('blk_duration_mins', time_per_block);
        psychoJS.experiment.addData('travel_duration', travel_duration);     // should update based on block type
        psychoJS.experiment.addData('feedback_duration', fbk_duration);
        psychoJS.experiment.addData('blk_number', curr_blk_number);
        psychoJS.experiment.addData('blk_type', curr_blk); // 1=long-steep, 2=long-shallow, 3=short-steep, 4=short-shallow
        psychoJS.experiment.addData('starting_value', sval);

        // trial variables
        psychoJS.experiment.addData('trial_phase', 1);   // 1 for travel, 2 for exploit/leave decision, 3 for exploit feedback
        psychoJS.experiment.addData('decision_type', 'NA'); // initialise. Use 1 for stay, 2 for leave
        psychoJS.experiment.addData('decay_rate', 'NA');    // decay value drawn from the distribution
        psychoJS.experiment.addData('patch_reward_prospective', 'NA'); // the prospective reward for an exploit action
        psychoJS.experiment.addData('patch_reward_recieved', 'NA');    // the reward recieved for the decision
        psychoJS.experiment.addData('patch_time_elapsed_seconds', 'NA'); // time spent in the current patch
        psychoJS.experiment.addData('patch_actions_taken', 'NA');        // number of actions related to the current patch (exploit and leave)
        psychoJS.experiment.addData('exploit_phase_key', 'NA');
        psychoJS.experiment.addData('exploit_phase_RT', 'NA');
        psychoJS.experiment.addData('blk_time_event_onset_seconds', block_time_elapsed_event_onset); // time recorded at begin routine
        psychoJS.experiment.addData('blk_time_event_offset_seconds', block_time_elapsed);            // time record at end routine
        psychoJS.experiment.addData('blk_time_fbk_offset_seconds', 'NA');  // offset time + feedback duration (only relevant to the exploit phase)
        psychoJS.experiment.addData('blk_time_remaining_event_onset', time_remaining_event_onset);
        psychoJS.experiment.addData('blk_time_remaining_event_offset', time_remaining);
        psychoJS.experiment.addData('blk_points', points_blk);
        psychoJS.experiment.addData('blk_actions', actions_blk);
        block_present_time=Date.now()
        mean_rew_timebased=points_blk/((block_present_time-block_start_time)/1000)
        mean_rew_actionbased=points_blk/actions_blk
        psychoJS.experiment.addData('mean_reward_block_time-based', mean_rew_timebased);
        psychoJS.experiment.addData('mean_reward_block_action-based', mean_rew_actionbased);

        // broader variables
        psychoJS.experiment.addData('total_points', total_points);
        psychoJS.experiment.addData('total_actions', total_actions);
        psychoJS.experiment.addData('time_elapsed_entire_foraging_task', (block_present_time-start_time_entire_foraging_task)/1000);
        psychoJS.experiment.addData('time_elapsed_entire_experiment', (block_present_time-start_time_entire_experiment)/1000);
        psychoJS.experiment.nextEntry()
    PolygonComponent ocean_select_2
      fillColor = $ocean_col
      lineColor = $ocean_col
      pos [set every repeat] = $ocean_pos
      shape = rectangle
      size [set every repeat] = $ocean_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
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    PolygonComponent isld_select_2
      disabled = True
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 30
      opacity [set every frame] = travel_opacity
      pos [set every repeat] = $isld_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
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    ImageComponent agent_select
      disabled = True
      image = stimuli/pirate_ship.png
      pos [set every repeat] = $ship_pos
      size [set every repeat] = $agent_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
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    TextComponent travel_text
      letterHeight = 0.025
      pos [set every repeat] = center_txt_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
      text [set every frame] = $travel_msg
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    TextComponent sailing_time_txt
      disabled = True
      letterHeight = 0.025
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
      text [set every frame] = $travel_time_remaining
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    TextComponent travel_blk_time_remaining
      letterHeight [set every repeat] = $action_msg_size
      pos [set every repeat] = $action_msg_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
      text [set every frame] = $time_remaining_msg
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  Routine exploit_fbk
    CodeComponent code_exploit_2
      Code Type = JS
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      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }

        // if s is pressed, end the routine
        if ((exploit_resp.keys === "s")) {
            continueRoutine=false;
            }

        // if the total time allowed in the block have been taken, end the block
        block_present_time=Date.now()
        block_time_elapsed=(block_present_time-block_start_time)/1000;
        time_remaining=(time_per_block*60)-block_time_elapsed

        if ((time_remaining<=0)) {
            exploit_actions=0;
            n_actions=0;
            continueRoutine=false;
            trials.finished=true;
            exploit_loop.finished=true;
            }
        time_remaining_rounded=Math.round(time_remaining);
        time_remaining_msg='Time left in block: ' + time_remaining_rounded.toString();

        time_remaining_mins=Math.floor(time_remaining_rounded/60)
        time_remaining_sec=time_remaining_rounded-(time_remaining_mins*60)
        time_remaining_msg='Time left in block: ' + time_remaining_mins.toString() + ':' + time_remaining_sec.toString();
    PolygonComponent ocean_exploit_2
      fillColor = $ocean_col
      lineColor = $ocean_col
      shape = rectangle
      size [set every repeat] = $ocean_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
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    PolygonComponent isld_exploit_2
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 25
      pos [set every repeat] = $isld_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
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    ImageComponent agent_exploit_2
      image = $agent
      pos [set every repeat] = $ship_pos
      size [set every repeat] = $agent_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
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    TextComponent points_txt_2
      color [set every repeat] = white
      letterHeight = 0.04
      pos [set every repeat] = $rew_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
      text [set every repeat] = $rew_displayed_msg
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    TextComponent exploit_fbk_dig_sail_txt
      letterHeight = 0.025
      pos [set every repeat] = [0,-0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
      text = Press space to dig for treasure and s to set sail
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    TextComponent exploit_fbk_action_count
      letterHeight [set every repeat] = $action_msg_size
      pos [set every repeat] = $action_msg_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
      text [set every frame] = $time_remaining_msg
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    ImageComponent treasure
      image [set every repeat] = $bounty
      opacity [set every repeat] = $fbk_opacity
      pos [set every repeat] = $treasure_pos
      size [set every repeat] = $treasure_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
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  Routine block_instructions
  Routine blk_instruc
    CodeComponent blk_instruc_code
      Code Type = JS
      Begin JS Experiment:
        // define shuffle function
        window.shuffle = function(a) {
            var j, x, i;
            for (i = a.length - 1; i > 0; i--) {
                j = Math.floor(Math.random() * (i + 1));
                x = a[i];
                a[i] = a[j];
                a[j] = x;
            }
            return a;
        }

        // define block information
        blk_order = [1, 2, 3, 4];
        shuffle(blk_order);
        blk_idx = -1;         // updated when routine begins
        curr_blk_number = 0;  // used for end of block message. Will update to one when starting block_instruc
        total_blk_number = 4; // number of blocks in the experiment
        actions_blk=0;        // reset total actions for the new block
        sval_mean=100;         // mean of the distribution from which the starting value is drawn
        sval_sd=10;            // standard deviation of the distribution from which the starting value is drawn
        k_mean=0.91           // mean of the distribution from which the decay rate is drawn. Reset to a block specific number under 'Begin Routine'
        k_sd=0.07             // standard deviation of the above
        time_per_block=7.5;     // the amount of time allowed per block in mintues
      Begin JS Routine:
        // determine block settings
        blk_idx=blk_idx+1;
        curr_blk = blk_order[blk_idx];
        curr_blk_number=curr_blk_number+1;

        // long steep condition
        if ((curr_blk===1)) {
            travel_duration=9
            //k_mean=0.81 // mean for decay distribution
            //k_mean=0.84 // mean for decay distribution
            k_mean=0.81 // mean for decay distribution
        }
        // long shallow condition
        if ((curr_blk===2)) {
            travel_duration=9
            //k_mean=0.96
            //k_mean=0.91
            k_mean=0.91
        }
        // short steep condition
        if ((curr_blk===3)) {
            //travel_duration=3
            //k_mean=0.81
            //travel_duration=2
            //k_mean=0.84
            travel_duration=2.5
            k_mean=0.81
        }
        // short shallow condition
        if ((curr_blk===4)) {
            //travel_duration=3
            //k_mean=0.96
            //travel_duration=2
            //k_mean=0.91
            travel_duration=2.5
            k_mean=0.91
        }
        blk_instruc_txt='Ready to set sail?\n\nLike any swashbuckling pirate with a thirst for riches, try to earn as many gold medallions as you can during the block, as this will increase your bonus payment!\n\n\n\nPress enter to begin'

        // reset block variables
        actions_blk=0;
        points_blk=0;
        mean_reward_blk=0;
      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }
      End JS Routine:
        //start block timer
        block_start_time=Date.now()
    TextComponent blk_txt
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $blk_instruc_txt
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    KeyboardComponent blk_instruc_resp
      allowedKeys = 'return',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine post_blk_msg
    CodeComponent post_blk_code
      Code Type = JS
      Begin JS Routine:
        blk_msg_points=Math.floor(points_blk);
        blk_msg_allpoints=Math.floor(total_points);

        if ((curr_blk_number<total_blk_number)) {
        post_blk_msg='Arrr! Well done salty sea dog.\n\n\In this block ye earned ' + blk_msg_points.toString() + ' gold medallions!\n\nYou have now completed ' + curr_blk_number.toString() + ' out of ' + total_blk_number.toString() + ' and have collected ' + blk_msg_allpoints.toString() + ' gold medallions overall. See if you can earn even more medallions in the next block to boost your bonus payment.\n\n\n\nPress space to continue'
        }

        if ((curr_blk_number===total_blk_number)) {
        post_blk_msg='Arrr! Well done salty sea dog.\n\n\In this block ye earned ' + blk_msg_points.toString() + ' gold medallions!\n\nYou have now completed ' + curr_blk_number.toString() + ' out of ' + total_blk_number.toString() + ' and have collected ' + blk_msg_allpoints.toString() + ' gold medallions overall.\n\n\n\nPress space to continue'
        }
      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }
    TextComponent text_2
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $post_blk_msg
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    KeyboardComponent post_blk_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demographics
    CodeComponent demographics_code
      Code Type = JS
      Begin JS Routine:
        // define function to load demographic questions
        var instructions = (function () {
            var instructions  = null;
            $.ajax({
                'async': false,
                'global': false,
                'url': "instructions.json",
                'dataType': "json",
                'success': function (data) {
                    instructions  = data;
                }
            });
            return instructions;
        })();

        // initialise input text
        addtext='';
        psychoJS.eventManager.clearKeys()

        if ((demographic_msg_counter===0)) {
        demographic_question=instructions.demographics.page1
        }

        if ((demographic_msg_counter===1)) {
        demographic_question=instructions.demographics.page2
        }

        if ((demographic_msg_counter===2)) {
        demographic_question=instructions.demographics.page3
        }
      Each JS Frame:
        if ((do_demographics===0)) {
            continueRoutine=false;
            trials.finished=true;
            }

        if ((terminate_expt===1)) {
            continueRoutine=false;
            //trials.finished=true;
            trials_demographics.finished=true;
            }

        // display text on screen
        numericKeys=['0','1','2','3','4','5','6','7','8','9'];
        let theseKeys = psychoJS.eventManager.getKeys({keyList:['1','2','3','4','5','6','7','8','9','0', 'backspace','return']});

        if (theseKeys[0] !== "return") {
            if (theseKeys[0] === "backspace") {
                addtext = addtext.substring((addtext.length-1), -1);
            } else if (numericKeys.includes(theseKeys[0])) {
                if (addtext.length < 2) {
                addtext = String(addtext)+String(theseKeys[0]);
                }
            }
        } else if (theseKeys[0] === "return") {
                if ((demographic_msg_counter===0)) {
                    age=addtext
                        if (addtext.length === 2) {
                            continueRoutine = false;
                         }
                    }

                if ((demographic_msg_counter===2)) {
                    gender=addtext
                        if (addtext.length === 1) {
                            continueRoutine = false;
                         }
                    }

                 if ((demographic_msg_counter===1)) {
                    educationYears=addtext
                        if (addtext.length > 0) {
                            continueRoutine = false;
                         }
                    }

              }
      End JS Routine:
        //if ((demographic_msg_counter===0)) {
        //    psychoJS.experiment.addData('age', (Number(age)));
        //    }

        //if ((demographic_msg_counter===1)) {
        //    psychoJS.experiment.addData('gender', (Number(gender)));
        //    }

        if ((demographic_msg_counter===2)) {
            psychoJS.experiment.addData('age', (Number(age)));
            psychoJS.experiment.addData('gender', (Number(gender)));
            psychoJS.experiment.addData('EducationYears', (Number(educationYears)));
            }

        demographic_msg_counter=demographic_msg_counter+1;

        // save data
                if (Number(age)>40){
                terminate_expt=1
                terminate_expt_time=50000;
                final_msg="Sorry captain, it looks like you are over the age limit for this experiment and cannot continue. Following the Prolific guidelines, please close the experiment at this point and return the submission. Thank you for your interest in this study."
                }
    TextComponent demographics_txt
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $demographic_question
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    TextComponent demographics_input
      letterHeight = 0.025
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $addtext
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    KeyboardComponent demo_resp
      allowedKeys = '0','1','2','3','4','5','6','7','8','9','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine welcome
    CodeComponent task_instruc_code
      Code Type = JS
      Begin JS Experiment:
        // define screen counters
        intruc_msg_counter=0;
        demographic_msg_counter=0;
        screening_msg_counter=0;
        task_instruc_msg_counter=0;

        // number of slides to present
        num_welcome=6;
        num_screening_questions=0; //2;
        num_demographic_questions=3;
        num_instruction_trials=9//10;

        // run phase?
        do_instruc=1;
        do_screening=1;
        do_demographics=1;
        do_task_instruc=1;

        // initialise variables
        screeningQ1=[];
        screeningQ2=[];
        label_txt='';
        age=[];
        gender=[];
        educationYears=[];

        // load task instruction images
        //instruc_imgs=["stimuli/free_choice1.png","stimuli/free_choice2.png","stimuli/free_choice3.png","stimuli/free_choice4.png","stimuli/free_choice5.png","stimuli/free_choice6.png","stimuli/free_choice6.png","stimuli/free_choice6.png","stimuli/forced_choice1.png","stimuli/forced_choice1.png"];
        //instruc_imgs=["stimuli/instruc1.png","stimuli/instruc2.png","stimuli/instruc3.png","stimuli/instruc4.png","stimuli/instruc5.png","stimuli/instruc6.png","stimuli/instruc7.png","stimuli/instruc8.png","stimuli/instruc8.png","stimuli/instruc8.png"];
        instruc_imgs=["stimuli/instruc1.png","stimuli/instruc2.png","stimuli/instruc3.png","stimuli/instruc3.png","stimuli/instruc5.png","stimuli/instruc6.png","stimuli/instruc7.png","stimuli/instruc8.png","stimuli/instruc8.png","stimuli/instruc8.png"];


        // task instructions opacity and positioning
            task_instruc_img_opacity=1;
            task_instruc_txt_pos=[0, 0.3];
            task_instruc_space_txt_pos=[0, -0.4]

        // initialise screening variables
        terminate_expt=0;
        terminate_expt_time=20;
        screeningQ1_passed=0;
        screeningQ2_passed=0;
        age=0;

        // final message if experiment is finished under normal circumstances
        final_msg=['Shiver me timbers! You completed the experiment. Press space to claim your treasure. Feel free to send us a message and let us know how found the task.'];

        // initalise variables for saving
        // participant variables
        psychoJS.experiment.addData('consent_given', 0);
        psychoJS.experiment.addData('screeningQ1', 0);
        psychoJS.experiment.addData('screeningQ2', 0);
        psychoJS.experiment.addData('age', 0);
        psychoJS.experiment.addData('gender', 0);
        psychoJS.experiment.addData('EducationYears', 0);

        // setting and block variables
        psychoJS.experiment.addData('starting_value_mean', 0); // should be defined under begin experiment in travel component
        psychoJS.experiment.addData('starting_value_sd', 0);
        psychoJS.experiment.addData('decay_rate_mean', 0);     // should update based on block type
        psychoJS.experiment.addData('decay_rate_sd', 0);
        psychoJS.experiment.addData('blk_duration_mins', 0);
        psychoJS.experiment.addData('travel_duration', 0);     // should update based on block type
        psychoJS.experiment.addData('feedback_duration', 0);
        psychoJS.experiment.addData('blk_number', 0);
        psychoJS.experiment.addData('blk_type', 0); // 1=long-steep, 2=long-shallow, 3=short-steep, 4=short-shallow
        psychoJS.experiment.addData('starting_value', 0);

        // trial variables
        psychoJS.experiment.addData('trial_phase', 0);   // 1 for travel, 2 for exploit/leave decision, 3 for exploit feedback
        psychoJS.experiment.addData('decision_type', 0); // initialise. Use 1 for stay, 2 for leave
        psychoJS.experiment.addData('decay_rate', 0);    // decay value drawn from the distribution
        psychoJS.experiment.addData('patch_reward_prospective', 0); // the prospective reward for an exploit action
        psychoJS.experiment.addData('patch_reward_recieved', 0);    // the reward recieved for the decision
        psychoJS.experiment.addData('patch_time_elapsed_seconds', 0); // time spent in the current patch
        psychoJS.experiment.addData('patch_actions_taken', 0);        // number of actions related to the current patch (exploit and leave)
        psychoJS.experiment.addData('exploit_phase_key', 0);
        psychoJS.experiment.addData('exploit_phase_RT', 0);
        psychoJS.experiment.addData('blk_time_event_onset_seconds', 0); // time recorded at begin routine
        psychoJS.experiment.addData('blk_time_event_offset_seconds', 0);// time record at end routine
        psychoJS.experiment.addData('blk_time_fbk_offset_seconds', 0);  // offset time + feedback duration
        psychoJS.experiment.addData('blk_time_remaining_event_onset', 0);
        psychoJS.experiment.addData('blk_time_remaining_event_offset', 0);
        psychoJS.experiment.addData('blk_points', 0);
        psychoJS.experiment.addData('blk_actions', 0);
        psychoJS.experiment.addData('mean_reward_block_time-based', 0);
        psychoJS.experiment.addData('mean_reward_block_action-based', 0);

        // broader variables
        psychoJS.experiment.addData('total_points', total_points);
        psychoJS.experiment.addData('total_actions', total_actions);
        psychoJS.experiment.addData('time_elapsed_entire_foraging_task', 0);
        psychoJS.experiment.addData('time_elapsed_entire_experiment', 0);

        // start timer for entire experiment
        start_time_entire_experiment=Date.now()
      Begin JS Routine:
        // define function to load instructions
        var instructions = (function () {
            var instructions  = null;
            $.ajax({
                'async': false,
                'global': false,
                'url': "instructions.json",
                'dataType': "json",
                'success': function (data) {
                    instructions  = data;
                }
            });
            return instructions;
        })();

        if ((intruc_msg_counter===0)) {
        task_instruc_msg=instructions.consent.page1
        }

        if ((intruc_msg_counter===1)) {
        task_instruc_msg=instructions.consent.page2
        }

        if ((intruc_msg_counter===2)) {
        task_instruc_msg=instructions.consent.page3
        }

        if ((intruc_msg_counter===3)) {
        task_instruc_msg=instructions.consent.page4
        }

        if ((intruc_msg_counter===4)) {
        task_instruc_msg=instructions.consent.page5
        }

        if ((intruc_msg_counter===5)) {
        task_instruc_msg=instructions.consent.page6
        }
      Each JS Frame:
        if ((do_instruc===0)) {
            continueRoutine=false;
            trials.finished=true;
            }
      End JS Routine:
        // update counter
        intruc_msg_counter=intruc_msg_counter+1;
    TextComponent task_instruc_txt
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_instruc_msg
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    KeyboardComponent task_instruc_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine screening_qs
    CodeComponent screening_code
      Code Type = JS
      Begin JS Experiment:
        // define button positions for screening qs
        button_col = 'black'
        button_size=[0.1, 0.1]
        button1_pos=[-0.45, -0.15]
        button2_pos=[-0.225, -0.15]
        button3_pos=[0, -0.15]
        button4_pos=[0.225, -0.15]
        button5_pos=[0.45, -0.15]

        btxt_col = 'black'
        btxt_size=0.03
        btxt1_pos=[-0.45, -0.215]
        btxt2_pos=[-0.225, -0.215]
        btxt3_pos=[0, -0.215]
        btxt4_pos=[0.225, -0.215]
        btxt5_pos=[0.45, -0.215]
      Begin JS Routine:
        // define function to demographic questions
        var instructions = (function () {
            var instructions  = null;
            $.ajax({
                'async': false,
                'global': false,
                'url': "instructions.json",
                'dataType': "json",
                'success': function (data) {
                    instructions  = data;
                }
            });
            return instructions;
        })();

        if ((screening_msg_counter===0)) {
        psychoJS.experiment.addData('consent_given', 1);
        screening_question=instructions.screening.page1
        screening_txt=["blue", "green", "black", "purple", "red"];

        //slider.ticks=[1,2,3,4,5];
        //slider.labels=["blue", "green", "black", "purple", "red"];
        }

        if ((screening_msg_counter===1)) {
        screening_question=instructions.screening.page2
        screening_txt=["one", "two", "three", "four", "five"];

        //slider.ticks=[1,2,3,4,5];
        //slider.labels=["one", "two", "three", "four", "five"];
        }

        //slider._needVertexUpdate = true;
        //slider._buildSlider();
        //slider.style=[visual.Slider.Style.RADIO]
      Each JS Frame:
        if ((do_screening===0)) {
            continueRoutine=false;
            trials.finished=true;
            }
      End JS Routine:
        if ((screening_msg_counter===0)) {
            screeningQ1_resp=mouse.clicked_name[0];
            if ((screeningQ1_resp === 'button4')) {
                screeningQ1_passed=1;
                }
            psychoJS.experiment.addData('screeningQ1', screeningQ1_passed);
            }

        if ((screening_msg_counter===1)) {
            screeningQ2_resp=mouse.clicked_name[0];
            if ((screeningQ2_resp === 'button3')) {
                screeningQ2_passed=1;
                }
            psychoJS.experiment.addData('screeningQ2', screeningQ2_passed);
            }

        screening_msg_counter=screening_msg_counter+1;

        if ((screening_msg_counter===2)) {
            if ((screeningQ1_passed===0 && screeningQ2_passed===0)) {
                terminate_expt=1;
                terminate_expt_time=50000;
                final_msg="Sorry captain, it looks like you failed both the attention checks and cannot continue with the study. Following the Prolific guidelines, please close the experiment at this point and return the submission. Thank you for your interest in this study.";
                }
        }
    TextComponent text_3
      letterHeight = 0.025
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_question
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    PolygonComponent button1
      fillColor [set every repeat] = $button_col
      lineColor [set every repeat] = $button_col
      nVertices = 30
      pos [set every repeat] = $button1_pos
      shape = regular polygon...
      size [set every repeat] = $button_size
      startVal [time (s)] = 0.0
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    PolygonComponent button2
      fillColor [set every repeat] = $button_col
      lineColor [set every repeat] = $button_col
      nVertices = 30
      pos [set every repeat] = $button2_pos
      shape = regular polygon...
      size [set every repeat] = $button_size
      startVal [time (s)] = 0.0
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    PolygonComponent button3
      fillColor [set every repeat] = $button_col
      lineColor [set every repeat] = $button_col
      nVertices = 30
      pos [set every repeat] = $button3_pos
      shape = regular polygon...
      size [set every repeat] = $button_size
      startVal [time (s)] = 0.0
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    PolygonComponent button4
      fillColor [set every repeat] = $button_col
      lineColor [set every repeat] = $button_col
      nVertices = 30
      pos [set every repeat] = $button4_pos
      shape = regular polygon...
      size [set every repeat] = $button_size
      startVal [time (s)] = 0.0
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    PolygonComponent button5
      fillColor [set every repeat] = $button_col
      lineColor [set every repeat] = $button_col
      nVertices = 30
      pos [set every repeat] = $button5_pos
      shape = regular polygon...
      size [set every repeat] = $button_size
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = button1, button2, button3, button4, button5
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name
      startVal [time (s)] = 0.0
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    TextComponent btxt1
      color [set every repeat] = $btxt_col
      font = Helvetica
      letterHeight [set every repeat] = btxt_size
      pos [set every repeat] = btxt1_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_txt[0]
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    TextComponent btxt2
      color [set every repeat] = $btxt_col
      letterHeight [set every repeat] = btxt_size
      pos [set every repeat] = $btxt2_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_txt[1]
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    TextComponent btxt3
      color [set every repeat] = $btxt_col
      letterHeight [set every repeat] = btxt_size
      pos [set every repeat] = btxt3_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_txt[2]
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    TextComponent btxt4
      color [set every repeat] = $btxt_col
      letterHeight [set every repeat] = btxt_size
      pos [set every repeat] = btxt4_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_txt[3]
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    TextComponent btxt5
      color [set every repeat] = $btxt_col
      letterHeight [set every repeat] = btxt_size
      pos [set every repeat] = btxt5_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_txt[4]
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  Routine task_instruc
    CodeComponent instruc_code
      Code Type = JS
      Begin JS Routine:
        // define function to load task instructions
        var instructions = (function () {
            var instructions  = null;
            $.ajax({
                'async': false,
                'global': false,
                'url': "instructions.json",
                'dataType': "json",
                'success': function (data) {
                    instructions  = data;
                }
            });
            return instructions;
        })();

        if ((task_instruc_msg_counter==0)) {
            task_instruction_txt=instructions.task.page1
        }

        if ((task_instruc_msg_counter==1)) {
            task_instruction_txt=instructions.task.page2
        }

        if ((task_instruc_msg_counter==2)) {
            task_instruction_txt=instructions.task.page3
        }

        if ((task_instruc_msg_counter==3)) {
            task_instruction_txt=instructions.task.page4
        }

        if ((task_instruc_msg_counter==4)) {
            task_instruction_txt=instructions.task.page5
        }

        if ((task_instruc_msg_counter==5)) {
            task_instruction_txt=instructions.task.page6
        }

        if ((task_instruc_msg_counter==6)) {
            task_instruction_txt=instructions.task.page7
        }

        if ((task_instruc_msg_counter==7)) {
            task_instruction_txt=instructions.task.page8
        }

        if ((task_instruc_msg_counter==8)) {
            task_instruction_txt=instructions.task.page9
        }

        if ((task_instruc_msg_counter==9)) {
            task_instruc_img_opacity=0;
            task_instruc_txt_pos=[0,0];
            task_instruc_space_txt_pos=[0, -0.1]
            task_instruction_txt=instructions.task.page10
        }
      Each JS Frame:
        if ((do_task_instruc===0)) {
            continueRoutine=false;
            trials.finished=true;
            }

        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }
      End JS Routine:
        task_instruc_msg_counter=task_instruc_msg_counter+1;

        // start timer
        start_time_entire_foraging_task=Date.now()
    TextComponent instruc_txt
      letterHeight = 0.025
      pos [set every repeat] = $task_instruc_txt_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_instruction_txt
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    ImageComponent instruc_image
      image [set every repeat] = $instruc_imgs[task_instruc_msg_counter]
      opacity [set every repeat] = $task_instruc_img_opacity
      pos = (0, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.025
      pos [set every repeat] = $task_instruc_space_txt_pos
      startVal [time (s)] = 0.0
      text = Press space to continue
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine close_expt
    TextComponent closing_msg_txt
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $terminate_expt_time
      text [set every repeat] = $final_msg
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    KeyboardComponent closing_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [condition] = $terminate_expt==0
      stopVal [duration (s)] = $terminate_expt_time
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  Routine screening_msg
    CodeComponent code
      Code Type = JS
      Each JS Frame:
        if (num_screening_questions==0) {
            continueRoutine = false;
            }

        if (num_demographic_questions==0) {
            continueRoutine = false;
            }

        if (terminate_expt!=1) {
            continueRoutine = false;
            }
    KeyboardComponent key_resp_2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $final_msg
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Flow
  LoopInitiator trials_welcome loopType="TrialHandler"
    loopType = random
    nReps = num_welcome
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    Routine welcome
  LoopTerminator trials_welcome
  LoopInitiator trials_screening loopType="TrialHandler"
    loopType = random
    nReps = num_screening_questions
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    Routine screening_qs
  LoopTerminator trials_screening
  LoopInitiator trials_demographics loopType="TrialHandler"
    loopType = random
    nReps = num_demographic_questions
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    Routine demographics
  LoopTerminator trials_demographics
  Routine screening_msg
  LoopInitiator trials_instructions loopType="TrialHandler"
    loopType = random
    nReps = num_instruction_trials
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    Routine task_instruc
  LoopTerminator trials_instructions
  LoopInitiator blk_loop loopType="TrialHandler"
    loopType = random
    nReps = total_blk_number
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    Routine blk_instruc
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 1000
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      Routine travel
      LoopInitiator exploit_loop loopType="TrialHandler"
        loopType = random
        nReps = 1000
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        Routine exploit
        Routine exploit_fbk
      LoopTerminator exploit_loop
    LoopTerminator trials
    Routine post_blk_msg
  LoopTerminator blk_loop
  Routine close_expt
